PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['session'], expInfo['date'])
  Experiment info = {'participant': '999', 'session': "['before', 'after']", 'rest_dur': '60', 'EEG': '[1, 0]', 'Chemicum': '[0, 1]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1600, 900]
  expName = restingState
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        fixCol = [0.25,0.25,0.25]

        # size of the grating in degrees
        gabor_size = 2
        # gratings midpoint distance from the centre (radius of the circle in degrees)
        gabor_dist = 5

        # number of gratings in each arrey
        distractorN = 2
        contAnnulus = 0.4 # 0.5 # 0.7/2 #0.5 # opacity of the annulus is hard coded to 0.5 (0.4*0.5)
        opaTarget = 0.5# 0.625 # 0.875/2#0.625 (0.5*0.4)

        annulusOri = randint(1,360)

        gabors_large = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(30, 30), fieldShape='circle', nElements=distractorN,
        sizes=20, xys=[(0,0), (0,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=[1,0.5], oris=annulusOri, sfs=2.0, contrs=contAnnulus,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        # circle used to cover two larger gabors
        circle = visual.Circle(
        win=win,
        units="deg",
        radius=6.5,
        fillColor=[0, 0, 0],
        lineColor=None,
        edges=99
        )

        # SMALL
        gabors_small = visual.ElementArrayStim(win, units='deg', fieldPos=(0.0, 0.0),
        fieldSize=(30, 30), fieldShape='circle', nElements=distractorN,
        sizes=7.5, xys=[(0,0), (0,0)], colors=([0.5, 0.5, 0.5]) ,
        colorSpace='rgb', opacities=[1, 0.5], oris=annulusOri, sfs=2.0, contrs=contAnnulus,
        phases=0, elementTex='sin',elementMask='circle', texRes=128,
        interpolate=True, name=None, autoLog=None, maskParams=None)

        EEG = expInfo['EEG']

        def sendTrigger(t, trigN, EEG):
            if EEG == '1':
                if t < 0.05 and t > 0:  # send trigger for 50 ms and do not send the trigger before next flip time
                    port.setData(int(trigN, 2))
                else:
                    pass
                    port.setData(0)
      Begin Routine:
        n = randint(1,5)
        randTime = list(randint(1,int(expInfo['rest_dur']), n))
        indx = 0
        trigdic = {'kiire': '11', 'aeglane': '10', '?': '01', 'high': '1', 'low': '0', 'iti': '000', 'cue': '100', 'prediction': '010', 'stimStart': '001', 'respInCorr': '110', 'respCorr': '011', 'pause': '111', 'question': '101'}


        trigNStart = '11000111' # none, low, pause
        trigNChange = '11001111' # none, high, pause

        offCOl = False
      Each Frame:
        sendTrigger(t, trigNStart, EEG)
        gabors_large.draw()
        #circle.draw()
        #gabors_small.draw()
        #
        #if any(t - randTime) < 0.25 and any(t - randTime) > 0:
        #    fixCol = [0.75,0.75,0.75]
        #else:
        #    fixCol =  [0.25,0.25,0.25]

        if True in (abs(t - ri) < 0.25 for ri in randTime): # and True in (t - ri > 0 for ri in randTime):
            if offCOl:
                cTime = t
                offCOl = False
            sendTrigger(t-cTime, trigNChange, EEG)
            fixCol = [0.75,0.75,0.75]
        else:
            offCOl = True
            fixCol =  [0.25,0.25,0.25]
      End Routine:
        thisExp.addData('nPoints', n)
    PolygonComponent fix
      fillColor [set every frame] = $fixCol
      lineWidth = 0
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = 0.5
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (s)] = $float(expInfo['rest_dur'])
      units = deg
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  Routine resp
    CodeComponent mouse_visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    SliderComponent slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20
      letterHeight = 1
      pos = (0, -0.4)
      saveStartStop = False
      size = (30, 1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    ButtonComponent button
      bold = True
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 1
      pos = (0, -6)
      save = none
      saveStartStop = False
      startVal [time (s)] = 0
      text = VALMIS
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    TextComponent qText
      color = black
      letterHeight = 1
      pos = (0, 8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Mitu korda täpp heledaks muutus?

        Vastus anna palun hiirega alloleval skaalal sobiva numbri juures klõpsates. Kui oled valmis, siis vajuta nupul "VALMIS".
  Routine intro
    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['EEG'] == '1':
            print('set port')
            from psychopy import parallel
            if expInfo['Chemicum'] == '1':
                port = parallel.ParallelPort(address=0x378)
            else:
                port = parallel.ParallelPort(address=0x3FF8)
                port.setData(0)
      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = False
    TextComponent intro_text
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Tere tulemast!

        Tegemist on lihtsa ülesandega, mille põhiliseks eesmärgiks on koguda andmeid Sinu aju elektrilise aktiivsuse baastaseme kohta. Palume Sul hoida pilk ekraani keskel paikneval täpil ja lugeda, mitu korda täpp heledaks muutub. Hoia see arv meeles, sest umbes minuti möödudes palume Sul seda arvu ka raporteerida.




        Palun oota kuni eksperimentaator käivitab mõõtmise...
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine outro
    TextComponent out_text
      color = black
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Aitäh! See katseosa on lõppenud. Palun teavita katse läbiviijat.
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial
    Routine resp
  LoopTerminator trials
  Routine outro
